PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = MemoryStudy
  keyboardBackend = ioHub
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Routines
  Routine Mem_Instructions
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Memory test instructions
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    KeyboardComponent End_Instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine MemoryTest
    VariableComponent Mem_curImage
      startVal [time (s)] = 0
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    CodeComponent Mem_Code
      Code Type = Py
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      Begin Experiment:
        trialClock = core.Clock()
      Begin Routine:
        t = 0
        trialClock.reset()
        imageCount = 0
      Each Frame:
        t = trialClock.getTime()

        curImage = "resources\\JPG\\" + Picture
        imageCount = 1
        Mem_curImage = Mem_curImage + ".jpg"
    TextComponent MemTest
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
      text = Did you see this image?
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    KeyboardComponent MemResponse
      allowedKeys = '0''1''2''3''4''5''6'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image
      image [set every repeat] = $Mem_curImage
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
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Flow
  Routine Mem_Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Memory_conditionSheet.xlsx
    loopType = random
    nReps = 1
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    conditions:
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      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'hockeypuck'},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'kiwi03'},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'lollipop04'},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'postalmailbox01'},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'parachute'},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'rockbass'},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'rollerblade'},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'saxophone'},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'scooter'},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'stepladder'},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'licenseplate'},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'shower'},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'stubbywrench01a'},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'baseballbat'},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'bed'},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'foldingchair'},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'butterfly'},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'car'},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'chefshat'},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'church'},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'duck01'},
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    Routine MemoryTest
  LoopTerminator trials
